20120920_215724 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Labware4
11,0;BoxDiTi 1000ul;Labware7
11,2;96WellMicroplate;Labware6
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
Variable(PlatesToFill,"6",1,"How Many Plates",0,1.000000,10.000000,0,2,1,1);
GetDITI2(255,"BoxDiTi 1000ul",1,0,10,70);
MoveLiha(255,1,2,1,"0108¯1",0,0,0,10,0,0);
BeginLoop("PlatesToFill","PlateIndex");
UserPrompt("Put New 96 Plate",0,-1);
Transfer_Rack("11","11",1,1,0,0,1,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","3","3","3");
BeginLoop("3","Fill96Plate");
Aspirate(255,">> Water free dispense LD & Trace <<	108","720","720","720","720","720","720","720","720",0,0,0,0,1,4,1,"0108¯1",0,0);
BeginLoop("4","Fill96Col");
Dispense(255,"Water free dispense no LD","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C08¯1000000000000",2,"Fill96Plate",0,4,"Fill96Col",0,1,0);
EndLoop();
EndLoop();
MoveLiha(255,1,2,1,"0108¯1",0,0,0,10,0,0);
Transfer_Rack("11","26",1,1,0,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","3","3","1");
FACTS("StoreX","StoreX_ReturnPlate","1,~LOOP_PlateIndex~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
EndLoop();
DropDITI(255,1,6,10,70,0);
