20120923_165954 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Labware4
4,1;96WellMicroplate;Labware6
11,1;6WellCaCo2Plate;Labware5
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Comment("Read");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\Protocols\CalibrateL1210Growth\Output\Read<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2012-09-20T17:19:13.75875Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COS6ft" plateWithCover="True">
<PlateRange range="A1&tilde;B3" auto="true">
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT1M" useDuration="false">
<Shaking mode="Orbital" time="PT20S" frequency="0" amplitude="3500" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTime timeSpan="PT5S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
<Well auto="true">
<MeasurementReading refID="4" refName="KINETIC.RUN.CYCLE" beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="1000000" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
