20120408_232339 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;Diti1000
11,1;6WellCaCo2Plate;Labware6
11,2;96WellMicroplate;Labware96
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.2",500,"0.2",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\CyclingInAmp\Scripts\Replace200ulTips.esc");
ImportVariable(Liconic6PlateCart#Liconic6PlatePos#Add2WellInd,"D:\OctoTip\Protocols\CyclingInAmp\Scripts\AddbLacData.csv",0#0#0,"1#1#1",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Liconic6PlateCart~,~Liconic6PlatePos~","1","6WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,1,0,1,"17","6WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","2","2");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Mix(1,"Water free dispense LD","180",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06040004",3,0,0);
Aspirate(1,"Water free dispense LD & Trace","30",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06040004",0,0);
Variable(WELL_OFFSET,"Add2WellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","30",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Mix(1,"Water free dispense LD","180",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",3,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Transfer_Rack("11","26",1,1,1,0,0,"17","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Liconic6PlateCart~,~Liconic6PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
