20120424_124103 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,1;384WellPlate;Labware97
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;Diti1000
11,1;6WellCaCo2Plate;Labware6
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.2",500,"0.2",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\CyclingInAmp\Scripts\Replace200ulTips.esc");
ImportVariable(Liconic6PlateCart#Liconic6PlatePos#MeasureWellInd#Empty384WellInd,"D:\OctoTip\Protocols\CyclingInAmp\Scripts\MeasureWellODData.csv",0#0#0#0,"1#1#1#1",0,1,0,1,1);
Comment("Get 6 Plate");
FACTS("StoreX","StoreX_PresentPlate","~Liconic6PlateCart~,~Liconic6PlatePos~","1","6WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",0,1,1,0,1,"17","6WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","2","2");
Comment("Open 384 Plate");
Transfer_Rack("4","4",1,1,0,0,1,"17","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","3","2");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Comment("Take 50ul to 384 Plate");
Variable(WELL_OFFSET,"MeasureWellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense no LD","180",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",3,0,0);
Aspirate(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Variable(WELL_OFFSET,"Empty384WellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Comment("Return plate to Liconic");
Transfer_Rack("11","26",1,1,1,0,0,"17","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Liconic6PlateCart~,~Liconic6PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Comment("Measure plate in reader");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("4","27",1,0,0,0,0,"","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","","Infinite 200","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\Protocols\CyclingInAmp\Output\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2012-04-05T09:34:19.3555Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE384st" plateWithCover="False">
<PlateRange range="A1&tilde;P24" auto="true">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("27","4",0,0,0,0,0,"","384 Well Plate","Narrow","","","Infinite 200","","MP 2Pos elevated TorreyPines","1","(Not defined)","2");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Comment("Close Plate");
Transfer_Rack("4","4",1,1,1,0,0,"17","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","3","2");
