20120424_123851 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;Diti1000
11,1;6WellCaCo2Plate;Labware6
11,2;96WellMicroplate;Labware96
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\CyclingInAmp\Scripts\Replace200ulTips.esc");
ImportVariable(Liconic6PlateCart#Liconic6PlatePos,"D:\OctoTip\Protocols\CyclingInAmp\Scripts\Startdata.csv",0#0,"1#1",0,1,0,1,1);
Variable(DETECTED_VOLUME_1,"6100",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleWellInd,"1",1,"In what wall index the sample?",1,1.000000,96.000000,0,2,1,0);
Comment("Open 6 Plate");
Transfer_Rack("11","11",1,1,0,0,1,"17","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","2","2","2");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
Comment("Test for enough LB");
Detect_Liquid(1,"Water free dispense LD",1,3,1,"010810",0,0);
IfThen("DETECTED_VOLUME_1",3,"6000");
MoveLiha(1,1,6,1,"010810",0,0,0,10,0,0);
UserPrompt("Not enuugh LB",2,-1);
Else();
EndIf();
If("DETECTED_VOLUME_1",3,"6000","Test for enough LB");
Comment("Fill 6 plate");
BeginLoop("7","Fill6");
Aspirate(1,"Water free dispense LD","857",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
Dispense(1,"Water free dispense no LD","857",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
EndLoop();
DropDITI(1,1,6,10,70,0);
Transfer_Rack("11","11",1,1,0,0,1,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","3","3","3");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Comment("Add AMP");
Mix(1,"Water free dispense LD","180",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06040002",3,0,0);
Aspirate(1,"Water free dispense LD","6",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06040002",0,0);
Dispense(1,"Water free dispense LD","6",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Comment("Inoculate 6 well");
Variable(WELL_OFFSET,"SampleWellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense no LD","60",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","60",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Mix(1,"Water free dispense no LD","200",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",3,0,0);
DropDITI(1,1,6,10,70,0);
Comment("Close Lids and move 2 liconic");
Transfer_Rack("11","26",0,1,1,0,0,"17","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Liconic6PlateCart~,~Liconic6PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Comment("Close Lids 96");
Transfer_Rack("11","11",1,1,0,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","3","3","3");
