20120929_210201 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;LBRes
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;Labware10
11,1;24WellCaCo2Plate;Labware9
11,2;96WellMicroplate;Plate96
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
Comment("Fill24");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("16","Fill24");
BeginLoop("2","Fillwell");
Aspirate(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,1,5,1,"010810",0,0);
Dispense(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"0604@000",1,"Fill24",2,1,0);
EndLoop();
EndLoop();
DropDITI(1,1,6,10,70,0);
Comment("Inoculate");
BeginLoop("3","inoc24");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Mix(1,"Water free dispense no LD","80",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0802000000000000",3,1,"inoc24",2,1,0);
Aspirate(1,"Water free dispense LD & Trace","40",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0802000000000000",1,"inoc24",2,1,0);
BeginLoop("4","inoc24Row");
Dispense(1,"Water free dispense LD & Trace","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"0604@000",2,"inoc24",0,1,"inoc24Row",1,1,0);
EndLoop();
DropDITI(1,1,6,10,70,0);
EndLoop();
