20120929_212801 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;LBRes
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,2;96WellMicroplate;Plate96
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
Variable(TaraWells,"6,7,8",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(DilutWells,"1,2,3",0,"",0,1.000000,10.000000,1,2,0,0);
Comment("Mix wells");
GetDITI2(255,"Box DiTi 200 ul",1,0,10,70);
Mix(255,"Water free dispense no LD","80","80","80","80","80","80","80","80",0,0,0,0,11,2,1,"0C08¯1000000000000",3,0,0);
DropDITI(255,1,6,10,70,0);
Comment("Read Plate");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("11","27",0,0,0,0,0,"","96WellMicroplate","Narrow","","","MP 3Pos Flat","","Infinite 200","3","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\Protocols\DilutToscanners\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2012-09-29T18:00:05.9835Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="NUN96fb" plateWithCover="False">
<PlateRange range="A1:H1" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="3" timeSpan="PT0S" maxDeviation="PT0S" duration="PT1M" useDuration="false">
<Well auto="true">
<MeasurementReading refID="5" refName="KINETIC.RUN.CYCLE" beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("27","11",1,0,0,0,0,"","96WellMicroplate","Narrow","","","Infinite 200","","MP 3Pos Flat","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Comment("RunScript");
EXECUTE_VBSCRIPT("D:\OctoTip\Protocols\DilutToscanners\CreateWLFromRead.vbs",0);
UserPrompt("Do?",0,-1);
Comment("Exsecute WL");
Worklist(0,D:\OctoTip\Protocols\DilutToscanners\DilutionsList.gwl,1,"Water free dispense LD & Trace",0,0);GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);DropDITI(1,1,6,10,70,0);
Worklist(1,,0,"",0,0);GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);DropDITI(1,1,6,10,70,0);
