20130521_100741 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;DiTi200
4,2;Eppendorf Block 24Pos.;Labware4
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi;Box DiTi 200 ul
22;Hotel 3Pos DiTi;Box DiTi 200 ul
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--{ RPG }--
ImportVariable(DiTi200Ind,"D:\OctoTip\Protocols\GrowKillCurvePlaiting\SharedResources\DiTi200Ind.csv",0,"1",0,1,0,1,1);
IfThen("DiTi200Ind",2,"3");
UserPrompt("No More DiTi replace Diti50 In Hotels",0,-1);
Variable(DiTi50Ind,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Comment("Put Empty Diti In Hotel 2 pos 3");
MoveLiha(255,1,1,1,"0108¯1",0,0,0,10,0,0);
Transfer_Rack("4","22",0,0,0,0,0,"","Box DiTi 200 ul","Narrow","","","MP 2Pos elevated TorreyPines","","Hotel 3Pos DiTi","1","(Not defined)","3");
Comment("Get Full Diti From Hotel");
IfThen("DiTi200Ind",3,"4");
Transfer_Rack("17","4",0,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","MP 2Pos elevated TorreyPines","DiTi200Ind","(Not defined)","1");
Comment("Put Empty Diti In Full Pos");
Transfer_Rack("22","17",1,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","Hotel 3Pos DiTi","3","(Not defined)","DiTi200Ind");
Else();
Transfer_Rack("22","4",0,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","MP 2Pos elevated TorreyPines","DiTi50Ind-3","(Not defined)","1");
Comment("Put Empty Diti In Full Pos");
Transfer_Rack("22","22",1,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","Hotel 3Pos DiTi","3","(Not defined)","DiTi50Ind-3");
EndIf();
Comment("Incriment DiTi Pos");
Variable(DiTi200Ind,"DiTi200Ind+1",0,"",0,1.000000,10.000000,0,2,0,0);
ExportVariable(DiTi200Ind,"D:\OctoTip\Protocols\GrowKillCurvePlaiting\SharedResources\DiTi200Ind.csv",1,1);
Set_DITI_Counter2("Box DiTi 200 ul","4","1","96",1);
Set_DITI_Counter2("Box DiTi 200 ul","4","1","1",0);
