20120220_094853 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
5,0;Box DiTi 50ul;Labware4
5,1;6WellCaCo2Plate;Labware5
11,0;384 Well Plate;Labware6
11,1;384 Well Plate;Labware7
11,2;384 Well Plate;Labware8
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"2",500,"2",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 50ul","D:\OctoTip\Protocols\IncubateRead\Scripts\IRReplaceDiTi50.esc");
ImportVariable(PlateCart#PlatePos#ReadPlateInd#ReadPlateFirstInd,"D:\OctoTip\Protocols\IncubateRead\Scripts\IRReadData.csv",0#0#0#0,"1#1#1#1",0,1,0,1,1);
Comment("Open 364 Plate");
Transfer_Rack("11","11",0,1,0,0,1,"17","384 Well Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","ReadPlateInd","ReadPlateInd","ReadPlateInd");
Comment("Move Plate");
FACTS("StoreX","StoreX_PresentPlate","~PlateCart~,~PlatePos~","1","6WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","5",1,1,1,0,1,"5","6WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","2");
Comment("Take Sample from 2 wells");
BeginLoop("2","Samples");
GetDITI2(1,"Box DiTi 50ul",1,0,10,70);
Mix(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,5,1,1,"03021",2,1,"Samples",2,1,0);
Aspirate(1,"Water free dispense LD & Trace No AG","50",0,0,0,0,0,0,0,0,0,0,0,5,1,1,"03021",1,"Samples",2,1,0);
Variable(WELL_OFFSET,"(ReadPlateFirstInd-1) + 192 * (LOOP_Samples-1 )",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"(ReadPlateInd-1)",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,11,0,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
Comment("Return Sample plate");
Transfer_Rack("5","26",0,1,1,0,0,"5","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~PlateCart~,~PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Comment("Read plate");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("11","27",0,0,0,0,1,"","384 Well Plate","Narrow","","","MP 3Pos Flat","","Infinite 200","ReadPlateInd","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\Protocols\IncubateRead\Output\6Well<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2012-02-20T07:40:56.284Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="NUN384ft" plateWithCover="True">
<PlateRange range="A1&tilde;P24" auto="true">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("27","11",0,0,0,0,1,"","384 Well Plate","Narrow","","","Infinite 200","","MP 3Pos Flat","1","(Not defined)","ReadPlateInd");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Comment("Close 384 plate");
Transfer_Rack("11","11",1,1,0,0,0,"17","384 Well Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","ReadPlateInd","ReadPlateInd","ReadPlateInd");
