20120329_143627 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
11,0;Box DiTi 50ul;50ul DiTi
1;System
27;Infinite 200
27;Storex
17;Hotel 3Pos DiTi;Box DiTi 50ul
22;Hotel 3Pos DiTi;Box DiTi 50ul
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--{ RPG }--
ImportVariable(DiTi50Ind,"D:\OctoTip\Protocols\IncubateRead\Scripts\DiTi50Ind.csv",0,"1",0,1,0,1,1);
IfThen("DiTi50Ind",2,"2");
UserPrompt("No More DiTi replace Diti50 In Hotels",0,-1);
Variable(DiTi50Ind,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Comment("Put Empty Diti In Hotel 2 pos 3");
Transfer_Rack("11","22",0,0,0,0,0,"","Box DiTi 50ul","Narrow","","","MP 3Pos Flat","","Hotel 3Pos DiTi","1","(Not defined)","3");
Comment("Get Full Diti From Hotel");
IfThen("DiTi50Ind",3,"4");
Transfer_Rack("17","11",0,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","MP 3Pos Flat","DiTi50Ind","(Not defined)","1");
Comment("Put Empty Diti In Full Pos");
Transfer_Rack("22","17",1,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","Hotel 3Pos DiTi","3","(Not defined)","DiTi50Ind");
Else();
Transfer_Rack("22","11",0,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","MP 3Pos Flat","DiTi50Ind-3","(Not defined)","1");
Comment("Put Empty Diti In Full Pos");
Transfer_Rack("22","22",1,0,0,0,0,"","12 Well CaCo2 Plate","Narrow","","","Hotel 3Pos DiTi","","Hotel 3Pos DiTi","3","(Not defined)","DiTi50Ind-3");
EndIf();
Set_DITI_Counter2("Box DiTi 50ul","11","3","1",0);
Set_DITI_Counter2("Box DiTi 50ul","11","3","96",1);
Comment("Incriment DiTi Pos");
Variable(DiTi50Ind,"DiTi50Ind+1",0,"",0,1.000000,10.000000,0,2,0,0);
ExportVariable(DiTi50Ind,"D:\RobotScripts\KillingCurve\DiTi50Ind.csv",1,1);
