20120618_210209 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
11,1;384WellPlate;Labware4
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
ImportVariable(PlateCart#PlatePos,"D:\OctoTip\Protocols\IncubateReadin384\Scripts\IRReadData.csv",0#0,"1#1",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~PlateCart~,~PlatePos~","1","384WellPlate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",0,1,0,0,1,"11","384WellPlate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","2");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("11","27",1,0,0,0,1,"","384WellPlate","Narrow","","","MP 3Pos Flat","","Infinite 200","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\Protocols\IncubateReadin384\Output\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2012-06-18T17:34:55.397875Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE384ft" plateWithCover="False">
<PlateRange range="A1&tilde;P24" auto="true">
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT1M" useDuration="false">
<Well auto="true">
<MeasurementReading refID="4" refName="KINETIC.RUN.CYCLE" beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("27","11",0,0,0,0,0,"","384WellPlate","Narrow","","","Infinite 200","","MP 3Pos Flat","1","(Not defined)","2");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("11","26",1,1,0,0,0,"11","384WellPlate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~PlateCart~,~PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
