20120508_115846 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 50ul;50ul
4,1;384WellPlate;384
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;1000ul
11,1;96WellMicroplate;96-1
11,2;96WellMicroplate;96-2
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"0.5",500,10,70,30,0,0,"1",1000,0);
Comment("Inoculate");
UserPrompt("?",0,-1);
BeginLoop("8","Inoculate_1");
GetDITI2(1,"Box DiTi 50ul",1,0,10,70);
Mix(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,1,"Inoculate_1",2,1,0);
Aspirate(1,"Water free dispense DiTi 50","30",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",1,"Inoculate_1",2,1,0);
Dispense(1,"Water free dispense no LD","20",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"0C0810000000000000",1,"Inoculate_1",2,1,0);
Dispense(1,"Water free dispense DiTi 50","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",1,"Inoculate_1",2,1,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
BeginLoop("8","Inoculate_2");
GetDITI2(1,"Box DiTi 50ul",1,0,10,70);
Mix(1,"Water free dispense no LD","50",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,1,"Inoculate_2",2,1,0);
Aspirate(1,"Water free dispense DiTi 50","30",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",1,"Inoculate_2",2,1,0);
Dispense(1,"Water free dispense no LD","20",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",1,"Inoculate_2",2,1,0);
Dispense(1,"Water free dispense DiTi 50","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100200000000000000000000000000000000000000000000000000000",1,"Inoculate_2",2,1,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
Comment("Dilut96");
UserPrompt("?",0,-1);
BeginLoop("9","Dilut1");
GetDITI2(255,"Box DiTi 50ul",1,0,10,70);
Mix(255,"Water free dispense no LD","40","40","40","40","40","40","40","40",0,0,0,0,11,1,1,"0C08¯1000000000000",3,1,"Dilut1",0,1,0);
Aspirate(255,"Water free dispense no LD","20","20","20","20","20","20","20","20",0,0,0,0,11,1,1,"0C08¯1000000000000",1,"Dilut1",0,1,0);
Dispense(255,"Water free dispense DiTi 50","20","20","20","20","20","20","20","20",0,0,0,0,11,1,1,"0C080®300000000000",1,"Dilut1",0,1,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
BeginLoop("9","Dilut2");
GetDITI2(255,"Box DiTi 50ul",1,0,10,70);
Mix(255,"Water free dispense no LD","40","40","40","40","40","40","40","40",0,0,0,0,11,2,1,"0C08¯1000000000000",3,1,"Dilut2",0,1,0);
Aspirate(255,"Water free dispense no LD","20","20","20","20","20","20","20","20",0,0,0,0,11,2,1,"0C08¯1000000000000",1,"Dilut2",0,1,0);
Dispense(255,"Water free dispense DiTi 50","20","20","20","20","20","20","20","20",0,0,0,0,11,2,1,"0C080®300000000000",1,"Dilut2",0,1,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
Comment("Dilut384");
UserPrompt("?",0,-1);
BeginLoop("2","Dilut_1");
BeginLoop("9","Dilut_2");
GetDITI2(255,"Box DiTi 50ul",1,0,10,70);
Mix(255,"Water free dispense DiTi 50 Ofer","50","50","50","50","50","50","50","50",0,0,0,0,4,1,2,"1810…Z10000000000000000000000000000000000000000000000000000",2,2,"Dilut_1",2,1,"Dilut_2",0,1,0);
Aspirate(255,"Water free dispense DiTi 50 Ofer","10","10","10","10","10","10","10","10",0,0,0,0,4,1,2,"1810…Z10000000000000000000000000000000000000000000000000000",2,"Dilut_1",2,1,"Dilut_2",0,1,0);
Dispense(255,"Water free dispense DiTi 50 Ofer","10","10","10","10","10","10","10","10",0,0,0,0,4,1,2,"181000„Z500000000000000000000000000000000000000000000000000",2,"Dilut_1",2,1,"Dilut_2",0,1,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
EndLoop();
