20121025_195158 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;Labware10
11,1;96WellMicroplate;Labware9
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
Comment("Fill 96");
GetDITI2(255,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("3","Fill96row");
Aspirate(255,"Water free dispense LD & Trace","570","570","570","570","570","570","570","570",0,0,0,0,1,5,1,"0108¯1",0,0);
BeginLoop("3","Fill963rows");
Dispense(255,"Water free dispense no LD","190","190","190","190","190","190","190","190",0,0,0,0,11,1,1,"0C080®300000000000",2,"Fill963rows",0,1,"Fill96row",0,4,0);
EndLoop();
EndLoop();
DropDITI(255,1,6,10,70,0);
UserPrompt("con?",0,-1);
Comment("FillFirstRows");
BeginLoop("3","Fill96Firstrows");
BeginLoop("8","Fill96FirstrowsWells");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Mix(1,"Water free dispense no LD","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,2,"Fill96FirstrowsWells",2,1,"Fill96Firstrows",2,8,0);
Aspirate(1,"Water free dispense LD & Trace","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",2,"Fill96Firstrows",2,8,"Fill96FirstrowsWells",2,1,0);
Dispense(1,"Water free dispense LD & Trace","200",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"0C0810000000000000",2,"Fill96FirstrowsWells",1,1,"Fill96Firstrows",0,4,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
EndLoop();
UserPrompt("con?",0,-1);
Comment("Dilute");
BeginLoop("3","DiluteGroup");
BeginLoop("3","DiluteGroupRows");
GetDITI2(255,"Box DiTi 200 ul",1,0,10,70);
Mix(255,"Water free dispense no LD","50","50","50","50","50","50","50","50",0,0,0,0,11,1,1,"0C08¯1000000000000",3,2,"DiluteGroupRows",0,1,"DiluteGroup",0,4,0);
Aspirate(255,">> Water free dispense LD & Trace <<	109","10","10","10","10","10","10","10","10",0,0,0,0,11,1,1,"0C08¯1000000000000",2,"DiluteGroupRows",0,1,"DiluteGroup",0,4,0);
Dispense(255,"Water free dispense no LD","10","10","10","10","10","10","10","10",0,0,0,0,11,1,1,"0C080®300000000000",2,"DiluteGroupRows",0,1,"DiluteGroup",0,4,0);
DropDITI(255,1,6,10,70,0);
EndLoop();
EndLoop();
