20120930_130322 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;DiTi1000
11,1;6WellCaCo2Plate;Labware6
11,2;96WellMicroplate;Sample
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("23","fill24");
BeginLoop("2","fill24well");
Aspirate(1,"Water free dispense LD & Trace","500",0,0,0,0,0,0,0,0,0,0,0,1,5,1,"010810",0,0);
Dispense(1,"Water free dispense LD & Trace","500",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",1,"fill24",2,1,0);
EndLoop();
EndLoop();
DropDITI(1,1,6,10,70,0);
