20120916_124257 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+AMP
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf Block 24Pos.;Labware8
11,0;BoxDiTi 1000ul;DiTi1000
11,1;6WellCaCo2Plate;Labware6
11,2;96WellMicroplate;Sample
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\KillCurvePlaiting\Scripts\Replace200ulTips.esc");
ImportVariable(Liconic6PlateCart#Liconic6PlatePos#NumberOfSamples#ONStartIndex#AMPPosision,"D:\OctoTip\Protocols\KillCurvePlaiting\Scripts\StartData.csv",0#0#0#0#0,"1#1#1#1#24",0,1,0,1,1);
Comment("Openl 6 Platte");
Transfer_Rack("11","11",1,1,0,0,1,"17","6WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","2","2","2");
Comment("Fill 6 Plate");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("NumberOfSamples","FillWellsLB");
BeginLoop("7","FillWell");
Aspirate(1,"Water free dispense no LD","857.14",0,0,0,0,0,0,0,0,0,0,0,1,5,1,"010810",0,0);
Dispense(1,"Water free dispense no LD","857.14",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",1,"FillWellsLB",2,1,0);
EndLoop();
EndLoop();
DropDITI(1,1,6,10,70,0);
Comment("Add Amp");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
BeginLoop("NumberOfSamples","FillWellsAMP");
Variable(WELL_OFFSET,"AMPPosision-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense no LD","6",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","6",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",1,"FillWellsAMP",2,1,0);
EndLoop();
DropDITI(1,1,6,10,70,0);
Comment("Inoculate Sampels");
Transfer_Rack("11","11",1,1,0,0,1,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","3","3","3");
BeginLoop("NumberOfSamples","Inoc");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Variable(WELL_OFFSET,"ONStartIndex-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,">> Water free dispense no LD <<	102","60",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",3,1,"Inoc",2,1,0);
Aspirate(1,">> Water free dispense no LD <<	103","60",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",1,"Inoc",2,1,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","60",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",1,"Inoc",2,1,0);
Mix(1,"Water free dispense no LD","180",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",3,1,"Inoc",2,1,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
Comment("Close 96");
Transfer_Rack("11","11",1,1,0,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","MP 3Pos Flat","3","3","3");
