20140427_112519 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough Cont Flow;Labware4
1,4;Trough 100ml;Antibiotic
1,5;Trough 100ml;LB
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf2ml Block 24Pos.;Labware5
11,2;96WellMicroplate;MDKPlate
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.2",500,"0.2",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\MDK\MDKPlate1\Scripts\ReplaceDiTi200.esc");
ImportVariable(Lic96PlateCart#Lic96PlatePos#DilutionVol,"D:\OctoTip\Protocols\MDK\MDKPlate1\Scripts\PrepareLogPlate.csv",0#0#0,"1#1#180",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Lic96PlateCart~,~Lic96PlatePos~","1","96WellMicroplate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,0,0,1,"17","96WellMicroplate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","3");
Comment("LB for dilution");
GetDITI2(255,"Box DiTi 200 ul",0,0,10,70);
Mix(255,"Water free dispense LD & Trace","200","200","200","200","200","200","200","200",0,0,0,0,1,5,1,"0108¯1",3,0,0);
BeginLoop("11","FillLB");
Aspirate(255,"Water free dispense LD & Trace","180","180","180","180","180","180","180","180",0,0,0,0,1,5,1,"0108¯1",0,0);
Dispense(255,"Water free dispense no LD","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C080®300000000000",1,"FillLB",0,1,0);
EndLoop();
Comment("Dilution");
Mix(255,"Water free dispense LD & Trace","200","200","200","200","200","200","200","200",0,0,0,0,1,4,1,"0108¯1",3,0,0);
Aspirate(255,"Water free dispense LD & Trace","180","180","180","180","180","180","180","180",0,0,0,0,1,4,1,"0108¯1",0,0);
Dispense(255,"Water free dispense no LD","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C08¯1000000000000",0,0);
BeginLoop("2","DiluteExt");
Aspirate(255,"Water free dispense LD & Trace","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt",0,0,0,0,1,4,1,"0108¯1",0,0);
BeginLoop("5","DiluteInt");
Dispense(255,"Water free dispense no LD","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt",0,0,0,0,11,2,1,"0C080®300000000000",2,"DiluteInt",0,2,"DiluteExt",0,1,0);
Mix(255,">> Water free dispense LD & Trace <<	181","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C080®300000000000",3,2,"DiluteInt",0,2,"DiluteExt",0,1,0);
Aspirate(255,">> Water free dispense LD & Trace <<	182","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt",0,0,0,0,11,2,1,"0C080®300000000000",2,"DiluteInt",0,2,"DiluteExt",0,1,0);
EndLoop();
Dispense(255,"Water free dispense no LD","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt","DilutionVol/LOOP_DiluteExt",0,0,0,0,1,1,1,"0108¯1",0,0);
EndLoop();
DropDITI(255,1,6,10,70,0);
Transfer_Rack("11","26",1,1,1,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","3","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic96PlateCart~,~Lic96PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
