20140424_153035 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough Cont Flow;Labware4
1,4;Trough 100ml;Antibiotic
1,5;Trough 100ml;LB
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf2ml Block 24Pos.;Labware5
11,2;96WellMicroplate;MDKPlate
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.2",500,"0.2",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\MDK\MDKPlate2\Scripts\ReplaceDiTi200.esc");
ImportVariable(Lic96PlateCart#Lic96PlatePos#BLacIndex#MICRow,"D:\OctoTip\Protocols\MDK\MDKPlate2\Scripts\Deactivate.csv",0#0#0#0,"1#1#1#1",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Lic96PlateCart~,~Lic96PlatePos~","1","96WellMicroplate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,1,0,1,"17","96WellMicroplate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","3");
GetDITI2(1,"Box DiTi 200 ul",0,0,10,70);
Variable(WELL_OFFSET,"BLacIndex-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense LD & Trace","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("8-MICRow","BLacRow");
BeginLoop("2","HalfRow");
Variable(WELL_OFFSET,"BLacIndex-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense LD & Trace","140",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
Dispense(1,"Water free dispense no LD","20",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
BeginLoop("6","GermCell");
Variable(WELL_OFFSET,"48*(LOOP_HalfRow-1)+MICRow",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","20",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"0C0810000000000000",2,"GermCell",0,1,"BLacRow",1,1,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
EndLoop();
EndLoop();
DropDITI(1,1,6,10,70,0);
Transfer_Rack("11","26",1,1,1,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","3","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic96PlateCart~,~Lic96PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
