20140211_183547 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough Cont Flow;Labware4
1,4;Trough 100ml;Antibiotic
1,5;Trough 100ml;LB
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,2;Eppendorf2ml Block 24Pos.;Labware5
11,2;96WellMicroplate;MDKPlate
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.2",500,"0.2",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\MDK99\Scripts\ReplaceDiTi200.esc");
ImportVariable(Lic96PlateCart#Lic96PlatePos#AntibioMinFrac#AntibioMaxFrac,"D:\OctoTip\Protocols\MDK99\Scripts\PreparePlate.csv",0#0#0#0,"1#1#0.05#0.5",0,1,0,1,1);
Variable(FracStep,"(AntibioMaxFrac-AntibioMinFrac)/10",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WellVol,"200",0,"",0,1.000000,10.000000,0,2,0,0);
FACTS("StoreX","StoreX_PresentPlate","~Lic96PlateCart~,~Lic96PlatePos~","1","96WellMicroplate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,0,0,1,"17","96WellMicroplate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","3");
GetDITI2(255,"Box DiTi 200 ul",0,0,10,70);
Mix(255,"Water free dispense no LD","200","200","200","200","200","200","200","200",0,0,0,0,1,5,1,"0108¯1",3,0,0);
Aspirate(255,"Water free dispense no LD","190","190","190","190","190","190","190","190",0,0,0,0,1,5,1,"0108¯1",0,0);
Dispense(255,"Water free dispense no LD","190","190","190","190","190","190","190","190",0,0,0,0,11,2,1,"0C08¯1000000000000",0,0);
BeginLoop("11","FillLB");
Variable(Vol,"190-WellVol*(AntibioMinFrac+(LOOP_FillLB-1)*FracStep)",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(255,"Water free dispense no LD","Vol","Vol","Vol","Vol","Vol","Vol","Vol","Vol",0,0,0,0,1,5,1,"0108¯1",0,0);
Dispense(255,"Water free dispense no LD","Vol","Vol","Vol","Vol","Vol","Vol","Vol","Vol",0,0,0,0,11,2,1,"0C080®300000000000",1,"FillLB",0,1,0);
EndLoop();
Mix(255,"Water free dispense no LD","200","200","200","200","200","200","200","200",0,0,0,0,1,4,1,"0108¯1",3,0,0);
BeginLoop("11","FillAntibiotic");
Variable(Vol,"WellVol*(AntibioMinFrac+(LOOP_FillAntibiotic-1)*FracStep)",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(255,"Water free dispense no LD","Vol","Vol","Vol","Vol","Vol","Vol","Vol","Vol",0,0,0,0,1,4,1,"0108¯1",0,0);
Dispense(255,"Water free dispense no LD","Vol","Vol","Vol","Vol","Vol","Vol","Vol","Vol",0,0,0,0,11,2,1,"0C080®300000000000",1,"FillAntibiotic",0,1,0);
EndLoop();
DropDITI(255,1,6,10,70,0);
Transfer_Rack("11","26",1,1,1,0,0,"17","96WellMicroplate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","3","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic96PlateCart~,~Lic96PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
