20121115_151824 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,1;384WellPlate;Dilution
4,2;Eppendorf Block 24Pos.;Cooler
11,0;BoxDiTi 1000ul;Diti1000
11,1;24WellCaCo2Plate;LinePlate
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
UserPrompt("Fill",0,-1);
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("2","fill24");
Aspirate(1,"Water free dispense LD & Trace","500",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
Dispense(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
EndLoop();
DropDITI(1,1,6,10,70,0);
UserPrompt("Close?",0,-1);
Transfer_Rack("11","26",1,1,1,0,0,"17","24WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
