20121205_091554 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 50ul;Labware5
4,2;Eppendorf Block 24Pos.;Cooler
11,0;BoxDiTi 1000ul;Diti1000
11,2;96WellMicroplate;Labware4
1;System
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
GetDITI2(255,"BoxDiTi 1000ul",1,0,10,70);
Mix(255,"Water free dispense LD & Trace","720","720","720","720","720","720","720","720",0,0,0,0,1,5,1,"0108¯1",5,0,0);
BeginLoop("4","fillPlates");
BeginLoop("3","fill4");
Aspirate(255,"Water free dispense LD & Trace","720","720","720","720","720","720","720","720",0,0,0,0,1,5,1,"0108¯1",0,0);
BeginLoop("4","fill");
Dispense(255,"Water free dispense no LD","180","180","180","180","180","180","180","180",0,0,0,0,11,2,1,"0C08¯1000000000000",2,"fill",0,1,"fill4",0,4,0);
EndLoop();
EndLoop();
MoveLiha(255,1,5,1,"0108¯1",0,0,0,10,0,0);
UserPrompt("cont?",0,-1);
EndLoop();
DropDITI(255,1,6,10,70,0);
