20140511_091306 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware4
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,1;384WellPlate;Labware5
4,2;Eppendorf Block 24Pos.;Cooler
11,0;BoxDiTi 1000ul;Diti1000
11,1;24WellCaCo2Plate;LinePlate
1;System
1;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.5",500,"0.5",500,10,70,30,0,0,"1",1000,0);
ActivateADH("Box DiTi 200 ul","D:\OctoTip\Protocols\SerialDilutionONEvolution\Scripts\ReplaceDiTi200.esc");
ImportVariable(Lic24PlateCart#Lic24PlatePos#FromWell#Dilution384Index#FreezeInd,"D:\OctoTip\Protocols\SerialDilutionONEvolution\Scripts\DiluteData.csv",0#0#0#0#0,"1#1#1#1#0",0,1,0,1,1);
Comment("Open 384 Plate");
Transfer_Rack("4","4",0,1,0,0,1,"11","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","3","2");
Comment("Get 24 Plate");
FACTS("StoreX","StoreX_PresentPlate","~Lic24PlateCart~,~Lic24PlatePos~","1","24WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,1,0,1,"17","24WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","2","2");
Comment("Fill24Well");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
Comment("Get & Open Plat");
BeginLoop("2","FillWell");
Aspirate(1,">> Water free dispense LD & Trace <<	194","500",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010880",0,0);
Variable(WELL_OFFSET,"FromWell",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
Comment("Fill 384 Plate");
Aspirate(1,">> Water free dispense LD & Trace <<	193","3*90",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010880",0,0);
Variable(WELL_OFFSET,"Dilution384Index-1",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("3","Fill384Well");
Dispense(1,"Water free dispense no LD","90",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",1,"Fill384Well",0,1,0);
EndLoop();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Freeze");
IfThen("FreezeInd",1,"0");
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,">> Water free dispense LD & Trace <<	120","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",3,0,0);
Aspirate(1,">> Water free dispense LD & Trace <<	119","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Variable(WELL_OFFSET,"FreezeInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","300",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
Mix(1,"Water free dispense no LD","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",3,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
DropDITI(1,1,6,10,70,0);
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Comment("Dilute");
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,">> Water free dispense LD & Trace <<	192","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Variable(WELL_OFFSET,"Dilution384Index-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
BeginLoop("2","Dilut384Well");
Mix(1,"Water free dispense LD & Trace","20",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",2,1,"Dilut384Well",0,1,0);
Aspirate(1,">> Water free dispense LD & Trace <<	192","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",1,"Dilut384Well",0,1,0);
Dispense(1,">> Water free dispense LD & Trace <<	192","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100040000000000000000000000000000000000000000000000000000",1,"Dilut384Well",0,1,0);
EndLoop();
Mix(1,">> Water free dispense LD & Trace <<	192","20",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100000@00000000000000000000000000000000000000000000000000",2,0,0);
Aspirate(1,">> Water free dispense LD & Trace <<	192","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100000@00000000000000000000000000000000000000000000000000",0,0);
Variable(WELL_OFFSET,"FromWell",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,">> Water free dispense LD & Trace <<	192","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",0,0);
Mix(1,">> Water free dispense LD & Trace <<	192","100",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06041000",2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Comment("ReturnPlate");
Transfer_Rack("11","26",0,1,1,0,0,"17","24WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic24PlateCart~,~Lic24PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Comment("Close 384 plate");
Transfer_Rack("4","4",1,1,0,0,0,"11","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","3","2");
