20121105_104638 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+Cam
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Diti200
4,1;384WellPlate;Dilution
4,2;Eppendorf Block 24Pos.;Cooler
11,0;BoxDiTi 1000ul;Diti1000
11,1;24WellCaCo2Plate;LinePlate
11,2;24WellCaCo2Plate;NewLinePlate
1;System
1;Infinite 200
26;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,"1",1000,0);
ImportVariable(Lic24PlateCart#Lic24PlatePos#Lic24NewPlateCart#Lic24NewPlatePos#Dilution348Ind#FreezeInd,"D:\OctoTip\Protocols\SerialDilutionEvolution\Scripts\Dilute2NewPlateData.csv",0#0#0#0#0#0,"1#1#2#2#1#0",0,1,0,1,1);
Comment("Get & Open Plates");
FACTS("StoreX","StoreX_PresentPlate","~Lic24PlateCart~,~Lic24PlatePos~","1","24WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",0,1,0,0,1,"17","24WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","2","2");
FACTS("StoreX","StoreX_PresentPlate","~Lic24NewPlateCart~,~Lic24NewPlatePos~","1","24WellCaCo2Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("26","11",1,1,0,0,1,"17","24WellCaCo2Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","3");
Comment("Fill24Well");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("2","FillWell");
Aspirate(1,"Water free dispense LD & Trace","500",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
Dispense(1,"Water free dispense no LD","500",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"06041000",0,0);
EndLoop();
Comment("Fill384Plate");
MoveLiha(1,1,3,1,"010810",0,0,0,10,0,0);
Transfer_Rack("4","4",1,1,0,0,1,"17","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","1","2");
Aspirate(1,"Water free dispense LD & Trace","270",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
BeginLoop("3","FillRow");
Variable(WELL_OFFSET,"Dilution348Ind-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","90",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",1,"FillRow",0,1,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
Comment("Freeze");
IfThen("FreezeInd",1,"0");
Mix(1,"Water free dispense no LD","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06040004",3,0,0);
Aspirate(1,"Water free dispense LD & Trace","300",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06040004",0,0);
Variable(WELL_OFFSET,"FreezeInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","300",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",0,0);
Mix(1,"Water free dispense no LD","200",0,0,0,0,0,0,0,0,0,0,0,4,2,1,"06041000",1,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
DropDITI(1,1,6,10,70,0);
Comment("Dilute2384Plate");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Aspirate(1,"Water free dispense LD & Trace","10",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"06040004",0,0);
Variable(WELL_OFFSET,"Dilution348Ind-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Comment("DiluteIn384Plate");
BeginLoop("2","Dilute384");
Variable(WELL_OFFSET,"Dilution348Ind-1",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Variable(WELL_OFFSET,"Dilution348Ind-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense LD & Trace","20",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",3,1,"Dilute384",0,1,0);
Aspirate(1,"Water free dispense LD & Trace","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18101000000000000000000000000000000000000000000000000000000",1,"Dilute384",0,1,0);
Dispense(1,"Water free dispense no LD","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100040000000000000000000000000000000000000000000000000000",1,"Dilute384",0,1,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
EndLoop();
Comment("Dilute224Plate");
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Variable(WELL_OFFSET,"Dilution348Ind-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense LD & Trace","20",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100000@00000000000000000000000000000000000000000000000000",3,0,0);
Aspirate(1,"Water free dispense LD & Trace","10",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"18100000@00000000000000000000000000000000000000000000000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","10",0,0,0,0,0,0,0,0,0,0,0,11,2,1,"06041000",0,0);
DropDITI(1,1,6,10,70,0);
Comment("ReturnPlates");
Transfer_Rack("11","26",0,1,1,0,0,"17","24WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","2","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic24PlateCart~,~Lic24PlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("11","26",1,1,1,0,0,"17","24WellCaCo2Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","3","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic24NewPlateCart~,~Lic24NewPlatePos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Comment("Close 384 Plate");
Transfer_Rack("4","4",1,1,0,0,0,"17","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","MP 3Pos Flat","MP 2Pos elevated TorreyPines","2","1","2");
