20120424_103935 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
4,0;Box DiTi 200 ul;Labware7
4,1;384WellPlate;Labware9
4,2;Eppendorf Block 24Pos.;Labware8
11,1;6WellCaCo2Plate;Labware5
11,2;384WellPlate;Labware10
1;System
27;Infinite 200
26;Storex
17;Hotel 3Pos DiTi;Box DiTi 200 ul
22;Hotel 3Pos DiTi;Box DiTi 200 ul
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--{ RPG }--
Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,1000,0);
Periodic_Wash(255,1,1,1,0,"0.1",500,"0.1",500,10,70,30,0,0,"1",1000,0);
ImportVariable(loop,"D:\OctoTip\Protocols\TestWait\scripts\Testdata.csv",0,"1",0,1,0,1,1);
BeginLoop("loop","rep");
Transfer_Rack("4","11",0,0,1,0,0,"","384WellPlate","Narrow","","","MP 2Pos elevated TorreyPines","","MP 3Pos Flat","2","(Not defined)","3");
Transfer_Rack("11","4",0,0,1,0,0,"","384WellPlate","Narrow","","","MP 3Pos Flat","","MP 2Pos elevated TorreyPines","3","(Not defined)","2");
EndLoop();
UserPrompt("trh",0,-1);
