20111018_162150 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+cam
1,4;Trough 100ml;T2
1,5;Trough 100ml;T3
1,6;Washstation 2Grid DiTi Waste
4,0;Eppendorf Block 24Pos.;Eppendorf 1.5
11,0;BoxDiTi 1000ul;Box DiTi 1000 ul
11,1;6 Well CaCo2 Plate;Labware1
11,2;Box DiTi 200 ul;Box DiTi 200 ul
17,1;6 Well CaCo2 Plate;EvoPlate
1;System
26;Infinite 200
27;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
Wash(255,1,1,1,0,"1",500,"1",500,10,70,30,0,0,1000,0);
ImportVariable(Lic6Cart#Lic6Pos#ToLic6Cart#ToLic6Pos#FromWell#ToWell#FreezWellInd#AMPWellInd,"D:\OctoTip\SampleData\Evo1\EvoDilutToAmpMovePlateParam.csv",0#0#0#0#0#0#0#0,"1#5#1#5#1#2#1#24",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Lic6Cart~,~Lic6Pos~","1","6_Well_CaCo2_Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("27","17",1,1,0,0,1,"17","6 Well CaCo2 Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","1","2");
FACTS("StoreX","StoreX_PresentPlate","~ToLic6Cart~,~ToLic6Pos~","1","6_Well_CaCo2_Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("27","11",1,1,0,0,1,"17","6 Well CaCo2 Plate","Narrow","","","Storex","MP 3Pos Flat","MP 3Pos Flat","1","3","2");
GetDITI2(1,"BoxDiTi 1000ul",1,0,10,70);
BeginLoop("4","Fill6");
Aspirate(1,"Water free dispense LD","742.5",0,0,0,0,0,0,0,0,0,0,0,1,3,1,"010810",0,0);
Variable(WELL_OFFSET,"ToWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense no LD","742.5",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(1,1,6,10,70,0);
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Variable(WELL_OFFSET,"AMPWellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Mix(1,"Water free dispense LD & Trace","150",0,0,0,0,0,0,0,0,0,0,0,4,0,1,"06041000",3,0,0);
Aspirate(1,"Water free dispense LD & Trace","30",0,0,0,0,0,0,0,0,0,0,0,4,0,1,"06041000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"ToWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense LD & Trace","30",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Mix(1,"Water free dispense LD & Trace","150",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",3,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
GetDITI2(1,"Box DiTi 200 ul",1,0,10,70);
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense LD & Trace","150",0,0,0,0,0,0,0,0,0,0,0,17,1,1,"03021",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"FreezWellInd-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense LD & Trace","150",0,0,0,0,0,0,0,0,0,0,0,4,0,1,"06041000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"FromWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense LD & Trace","30",0,0,0,0,0,0,0,0,0,0,0,17,1,1,"03021",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"ToWell-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense LD & Trace","30",0,0,0,0,0,0,0,0,0,0,0,11,1,1,"03021",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,1,6,10,70,0);
Transfer_Rack("17","27",1,1,0,0,0,"17","6 Well CaCo2 Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","1","1");
FACTS("StoreX","StoreX_ReturnPlate","~Lic6Cart~,~Lic6Pos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
Transfer_Rack("11","27",0,1,0,0,0,"17","6 Well CaCo2 Plate","Narrow","","","MP 3Pos Flat","MP 3Pos Flat","Storex","2","3","1");
FACTS("StoreX","StoreX_ReturnPlate","~ToLic6Cart~,~ToLic6Pos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
