20111011_150855 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;Labware1
1,4;Trough 100ml;Labware2
1,5;Trough 100ml;Labware3
1,6;Washstation 2Grid DiTi Waste
11,1;Box DiTi 200 ul;Labware5
11,2;Box DiTi 200 ul;Labware4
1;System
27;Infinite 200
27;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
ImportVariable(Washes,"D:\OctoTip\SampleData\TestScripts\Test\TestParameters.csv",0,"0",0,1,0,1,1);
Variable(do,"0",1,"continue",0,1.000000,10.000000,0,2,1,0);
IfThen("do",0,"1");
BeginLoop("Washes","Wash");
Wash(255,1,1,1,0,"3.0",500,"4.0",500,10,70,30,0,0,1000,0);
StartTimer("1");
WaitTimer("1","4");
EndLoop();
Else();
EndIf();
