20111101_213555 Tecan
Tecan
--{ RES }--
V;200
--{ CFG }--
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1,0;Washstation 2Grid Cleaner short
1,1;Washstation 2Grid Waste
1,2;Washstation 2Grid Cleaner long
1,3;Trough 100ml;LB+cam
1,4;Trough 100ml;T2
1,5;Trough 100ml;T3
1,6;Washstation 2Grid DiTi Waste
4,0;Eppendorf Block 24Pos.;Eppendorf 1.5
11,0;BoxDiTi 1000ul;Box DiTi 1000 ul
11,1;96 Well Microplate;96Source
11,2;Box DiTi 200 ul;Box DiTi 200 ul
17,1;6 Well CaCo2 Plate;EvoPlate
1;System
26;Infinite 200
27;Storex
17;Hotel 3Pos DiTi
22;Hotel 3Pos DiTi
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--{ RPG }--
ImportVariable(Lic6Cart#Lic6Pos,"D:\OctoTip\SampleData\Evo1\EvoRead2ODParam.csv",0#0,"1#1",0,1,0,1,1);
FACTS("StoreX","StoreX_PresentPlate","~Lic6Cart~,~Lic6Pos~","1","6_Well_CaCo2_Plate");
FACTS("StoreX","StoreX_EndAccess","","0","");
Vector("VEC COVER6 ON LICNIC","27","1",0,1,0,1,0,0);
Vector("VEC COVER6 ON TABLE","17","1",0,1,2,0,0,0);
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("27","26",1,0,0,0,0,"","6 Well CaCo2 Plate","Narrow","","","Storex","","Infinite 200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","D:\OctoTip\SampleData\Evo1\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="Tecan" createdAt="2011-10-17T08:56:11.53125Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COS6ft" plateWithCover="False">
<PlateRange range="A1&tilde;B3" auto="true">
<Temperature module="PLATE" temperature="370" switch="ON" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="3" timeSpan="PT0S" maxDeviation="PT0S" duration="PT1M" useDuration="false">
<Well auto="true">
<MeasurementReading refID="5" refName="KINETIC.RUN.CYCLE" beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="OD" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6300" bandwidth="100" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
<Temperature module="PLATE" temperature="240" switch="OFF" />
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("26","27",0,0,0,0,0,"","6 Well CaCo2 Plate","Narrow","","","Infinite 200","","Storex","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Vector("VEC COVER6 ON TABLE","17","1",0,1,0,1,0,0);
Vector("VEC COVER6 ON LICNIC","27","1",0,1,2,0,0,0);
FACTS("StoreX","StoreX_ReturnPlate","~Lic6Cart~,~Lic6Pos~","0","");
FACTS("StoreX","StoreX_EndAccess","","0","");
